PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Simple:ChoiceRT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    TextComponent trialTypeText
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'SIMPLE: press SPACE' if task=='simple' else 'CHOICE: press F or J'
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
    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $jitter
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # trial_code: Begin Routine
        import random
        # jitter between fixation and stimulus
        jitter = random.uniform(0.5, 1.0)

        # set allowed keys for this trial based on trialType (from CSV)
        if trialType == 'simple':
            allowedKeys = ['space']
            correctKeyThisTrial = 'space'
        else:
            allowedKeys = ['f','j']
            correctKeyThisTrial = correctKey  # from CSV
      End Routine:
        # trial_code: End Routine
        # log jitter and allowed keys
        thisExp.addData('jitter', jitter)
        thisExp.addData('allowedKeys', ','.join(allowedKeys))

        # response data are logged by code below (after resp exists)
        # (End routine code for resp logging is added separately below)
        # Ensure resp exists and log response info
        if resp.keys:
            thisExp.addData('response', resp.keys)
            thisExp.addData('rt', resp.rt)
        else:
            thisExp.addData('response', '')
            thisExp.addData('rt', '')

        # determine correctness for choice trials
        if trialType == 'choice':
            # correctKeyThisTrial set in Begin Routine
            try:
                correct = 1 if resp.keys == correctKeyThisTrial else 0
            except:
                correct = 0
            thisExp.addData('correct', correct)
        else:
            thisExp.addData('correct', '')  # not applicable
    PolygonComponent circle
      fillColor [set every repeat] = $color
      lineColor [set every repeat] = $color
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = $0.5 + jitter
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    KeyboardComponent resp
      allowedKeys = $allowedKeys
      forceEndRoutine = True
      startVal [time (s)] = $0.5 + jitter
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    StaticComponent ITI
      saveData = False
      stopVal [duration (s)] = $iti
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  Routine Instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Two mixed tasks:
        1) SIMPLE: Press SPACE as fast as possible when any circle appears.
        2) CHOICE: Press F if the circle is BLUE, J if the circle is RED.

        Keep fingers on F and J. Press SPACE to start practice, then experiment.
    KeyboardComponent instr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('task', 'choice'), ('color', 'red'), ('correctKey', 'j'), ('trialType', 'choice'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'blue'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'red'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'choice'), ('color', 'blue'), ('correctKey', 'f'), ('trialType', 'choice'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'red'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'choice'), ('color', 'red'), ('correctKey', 'j'), ('trialType', 'choice'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'blue'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'choice'), ('color', 'blue'), ('correctKey', 'f'), ('trialType', 'choice'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'blue'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'choice'), ('color', 'blue'), ('correctKey', 'f'), ('trialType', 'choice'), ('iti', np.float64(0.4))]),
      OrderedDict([('task', 'simple'), ('color', 'red'), ('correctKey', 'space'), ('trialType', 'simple'), ('iti', np.float64(0.4))])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
    Routine trial
  LoopTerminator trials
  Routine end
