PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  expName = wordpriming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submt
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Cond.wp.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book ')]),
      OrderedDict([('Study_word', 'cushion ')]),
      OrderedDict([('Study_word', 'phone')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board')]),
      OrderedDict([('Study_word', 'Laptop ')]),
      OrderedDict([('Study_word', 'Chart ')]),
      OrderedDict([('Study_word', 'T-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'Pastry')]),
      OrderedDict([('Study_word', 'Case ')]),
      OrderedDict([('Study_word', 'Cruise')]),
      OrderedDict([('Study_word', 'Police')]),
      OrderedDict([('Study_word', 'Keys')]),
      OrderedDict([('Study_word', 'Poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = cond2_wp - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_words', 'l_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_ou_se'), ('Reference', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'P_st_r'), ('Reference', 'Pastry'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'c_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_ru_s_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'P_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'K_y_'), ('Reference', 'Keys'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'P_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('test_words', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('test_words', 'ta_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('test_words', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_words', 'v_s_'), ('Reference', 'Vase'), ('old_new', 'new')])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
    Routine Test_Phase
  LoopTerminator trials_2
